PsychoPy2experiment version="3.0.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = black
  expName = free recall task
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Routines
  Routine choose_block_setup
    CodeComponent code_choose_blocks
      Code Type = Py
      Begin Experiment:
        import random
        import pandas as pd

        # Specify the name of the file that specifies the
        # range of trials in each block
        block_ranges = pd.read_csv('choose_blocks.csv')

        # Randomize experiment blocks
        block_ranges_exp = list(block_ranges.choose_blocks_exp)
        random.shuffle(block_ranges_exp)
  Routine resp_parti
  Routine trial
    TextComponent text_word
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $text
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    ParallelOutComponent p_port
      address = 0x0378
      startData = $trigger
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 2
      syncScreen = True
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        current_word_list = []
        current_word_list_valence = []
      End Routine:
        current_word_list.append(text)
        current_word_list_valence.append(condition)
  Routine ISI
    PolygonComponent ISI_screen
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine rest
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        # Initial value for word list
        word_list_number = 1
      Begin Routine:
        # Presents a break if the number of the current
        # list is in the list

        # If the number of lists presented before each
        # rest changes, the list needs to be updated with the
        # trial number after which there should be
        # a break
        if word_list_number not in [3, 6, 9]:
            continueRoutine = False

        # Needs to be updated after verifying
        # the list of word lists so it correctly
        # presents the break after the specified
        # word list number
        word_list_number += 1
    TextComponent text_rest_instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        ¡Toma un descanso!

        Presiona cualquier tecla para comenzar
    KeyboardComponent key_stop_rest
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation_cross_routine
    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Instructions
    TextComponent text_instructions
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Vas a ver una lista de palabras.

        Las palabras van a ser presentadas una a la vez.

        Luego vas a escribir todas las palabras que recuerdes de la lista, separadas por un espacio.

        Presiona 'Enter' cuando termines de escribir todas las palabras que recuerdes.


        Presiona cualquier tecla para continuar.
    KeyboardComponent key_resp_start
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_words
    TextComponent text_word_practice
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $text
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    CodeComponent code_store_words_practice
      Code Type = Py
      Begin Experiment:
        current_word_list = []
      End Routine:
        current_word_list.append(text)
  Routine participant_response_exp
    KeyboardComponent key_resp_exp
      allowedKeys = 'q','w','e','r','t','y','u','i','o','p','a','s','d','f','g','h','j','k','l','z','x','c','v','b','n','m','space','backspace','return'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    TextComponent text_prompt_exp
      letterHeight = 0.1
      pos = (0, .20)
      startVal [time (s)] = 0
      text = Escribe palabras:
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    TextComponent resp_feedback_exp
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every frame] = $resp_feedback_text_exp
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    CodeComponent code_recall
      Code Type = Py
      Begin Experiment:
        resp_feedback_text_exp = ''
      Each Frame:
        # insert the correct symbol when the participant
        # press backspace
        if "backspace" in key_resp_exp.keys:
            key_resp_exp.keys.remove("backspace")

            if len(key_resp_exp.keys) > 0:
                key_resp_exp.keys.pop()

        # insert the correct symbol when the participant
        # press space
        elif "space" in key_resp_exp.keys:
                key_resp_exp.keys.remove("space")
                key_resp_exp.keys.append(' ')

        # save results and end routine when
        # return in entered
        elif 'return' in key_resp_exp.keys:
            key_resp_exp.keys.remove('return')
            # add data to results file
            thisExp.addData('text', 'summary')
            thisExp.addData('word_list', ' '.join(current_word_list))
            thisExp.addData('word_list_valence', ' '.join(current_word_list_valence))
            thisExp.addData('recall_resp_exp', resp_feedback_text_exp)
            continueRoutine = False

        resp_feedback_text_exp = ''.join(key_resp_exp.keys)
      End Routine:
        resp_feedback_text_exp = ''
        current_word_list.clear()
        current_word_list_valence.clear()
  Routine participant_response_practice
    KeyboardComponent key_resp_practice
      allowedKeys = 'q','w','e','r','t','y','u','i','o','p','a','s','d','f','g','h','j','k','l','z','x','c','v','b','n','m','space','backspace','return'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    TextComponent text_prompt_practice
      letterHeight = 0.1
      pos = (0, .20)
      startVal [time (s)] = 0
      text = Escribe palabras:
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    TextComponent resp_feedback_practice
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text [set every frame]:
        $resp_feedback_text_practice
    CodeComponent code_recalled_practice
      Code Type = Py
      Begin Experiment:
        resp_feedback_text_practice= ''
      Each Frame:
        # insert the correct symbol when the participant
        # press backspace
        if "backspace" in key_resp_practice.keys:
            key_resp_practice.keys.remove("backspace")

            if len(key_resp_practice.keys) > 0:
                key_resp_practice.keys.pop()

        # insert the correct symbol when the participant
        # press space
        elif "space" in key_resp_practice.keys:
                key_resp_practice.keys.remove("space")
                key_resp_practice.keys.append(' ')

        # save results and end routine when
        # return in entered
        elif 'return' in key_resp_practice.keys:
            key_resp_practice.keys.remove('return')
            # add data to results file
            thisExp.addData('text', 'summary_practice')
            thisExp.addData('word_list', ' '.join(current_word_list))
            thisExp.addData('word_list_valence', ' '.join(current_word_list_valence))
            thisExp.addData('recall_resp_exp', resp_feedback_text_practice)
            continueRoutine = False

        resp_feedback_text_practice = ''.join(key_resp_practice.keys)
      End Routine:
        resp_feedback_text_practice = ''
        current_word_list.clear()
        current_word_list_valence.clear()
Flow
  Routine choose_block_setup
  LoopInitiator practice loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1
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    Routine Instructions
    Routine fixation_cross_routine
    LoopInitiator practice_trial loopType="TrialHandler"
      conditionsFile = practice_trials.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('text', 'amarillo')]),
        OrderedDict([('text', 'azul')]),
        OrderedDict([('text', 'blanco')]),
        OrderedDict([('text', 'crema')]),
        OrderedDict([('text', 'fucha')]),
        OrderedDict([('text', 'gris')]),
        OrderedDict([('text', 'lila')]),
        OrderedDict([('text', 'magenta')]),
        OrderedDict([('text', 'naranja')]),
        OrderedDict([('text', 'negro')]),
        OrderedDict([('text', 'rojo')]),
        OrderedDict([('text', 'rosa')]),
        OrderedDict([('text', 'turquesa')]),
        OrderedDict([('text', 'verde')]),
        OrderedDict([('text', 'violeta')])]
      Routine practice_words
      Routine ISI
    LoopTerminator practice_trial
    Routine participant_response_practice
  LoopTerminator practice
  Routine Instructions
  LoopInitiator block_loops loopType="TrialHandler"
    loopType = random
    nReps = len(block_ranges_exp)
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    Routine fixation_cross_routine
    LoopInitiator word_list loopType="TrialHandler"
      Selected rows = $block_ranges_exp.pop()
      conditionsFile = exp_trials.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('text', 'negative11'), ('condition', 'negative')]),
        OrderedDict([('text', 'negative12'), ('condition', 'negative')]),
        OrderedDict([('text', 'negative13'), ('condition', 'negative')]),
        OrderedDict([('text', 'neutral11'), ('condition', 'neutral')]),
        OrderedDict([('text', 'neutral12'), ('condition', 'neutral')]),
        OrderedDict([('text', 'neutral13'), ('condition', 'neutral')]),
        OrderedDict([('text', 'positive11'), ('condition', 'positive')]),
        OrderedDict([('text', 'positive12'), ('condition', 'positive')]),
        OrderedDict([('text', 'positive13'), ('condition', 'positive')]),
        OrderedDict([('text', 'negative21'), ('condition', 'negative')]),
        OrderedDict([('text', 'negative22'), ('condition', 'negative')]),
        OrderedDict([('text', 'negative23'), ('condition', 'negative')]),
        OrderedDict([('text', 'neutral21'), ('condition', 'neutral')]),
        OrderedDict([('text', 'neutral22'), ('condition', 'neutral')]),
        OrderedDict([('text', 'neutral23'), ('condition', 'neutral')]),
        OrderedDict([('text', 'positive21'), ('condition', 'positive')]),
        OrderedDict([('text', 'positive22'), ('condition', 'positive')]),
        OrderedDict([('text', 'positive23'), ('condition', 'positive')])]
      Routine trial
      Routine ISI
    LoopTerminator word_list
    Routine participant_response_exp
    Routine rest
  LoopTerminator block_loops
